# Generated by Configurator on Fri Dec 18 16:03:06 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM2,SerialManager,COM2
Device,COM3,SerialManager,COM3
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,TLPolarizer,LeicaDMI,TLPolarizer
Device,DIC Turret,LeicaDMI,DIC Turret
Device,Condensor,LeicaDMI,Condensor
Device,Transmitted Light,LeicaDMI,Transmitted Light
Device,LudlController,Ludl,LudlController
Device,LudlWheel,Ludl,LudlWheel

# Pre-init settings for devices
Property,COM2,AnswerTimeout,2000.0000
Property,COM2,BaudRate,9600
Property,COM2,DTR,Disable
Property,COM2,DataBits,8
Property,COM2,DelayBetweenCharsMs,11.0000
Property,COM2,Fast USB to Serial,Disable
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,2
Property,COM2,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,19200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,COM3
Property,LudlController,Port,COM2
Property,LudlWheel,Fiter Positions,6
Property,LudlWheel,Home-Timeout-(s),10.0000
Property,LudlWheel,LudlDeviceNumberWheel,1
Property,LudlWheel,LudlWheelNumber,1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,TLPolarizer,Scope
Parent,DIC Turret,Scope
Parent,Condensor,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,TL-Shutter
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,4,5-EMP
Label,IL-Turret,3,4-N21
Label,IL-Turret,2,3-I3
Label,IL-Turret,1,2-A
Label,IL-Turret,0,1-Ana
# ObjectiveTurret
Label,ObjectiveTurret,6,7-0x 0na
Label,ObjectiveTurret,5,6-40x 0.8na
Label,ObjectiveTurret,4,5-63x 0.9na
Label,ObjectiveTurret,3,4-40x 0.75na
Label,ObjectiveTurret,2,3-20x 0.5na
Label,ObjectiveTurret,1,2-10x 0.3na
Label,ObjectiveTurret,0,1-4x 0.1na
# TLPolarizer
Label,TLPolarizer,0,Out
# DIC Turret
Label,DIC Turret,3,4--
Label,DIC Turret,2,3--
Label,DIC Turret,1,2-D
Label,DIC Turret,0,1-D1
# Condensor
Label,Condensor,6,7-PH1
Label,Condensor,5,6-K6
Label,Condensor,4,5-PH2
Label,Condensor,3,4-K3
Label,Condensor,2,3-BF
Label,Condensor,1,2-K7
Label,Condensor,0,1-K2
# LudlWheel
Label,LudlWheel,5,Filter-6
Label,LudlWheel,4,Filter-5
Label,LudlWheel,3,Filter-4
Label,LudlWheel,2,Filter-3
Label,LudlWheel,1,Filter-2
Label,LudlWheel,0,Filter-1

# Configuration presets
# Group: wheel
# Preset: Filter-6
ConfigGroup,wheel,Filter-6,LudlWheel,Label,Filter-6

# Preset: Filter-5
ConfigGroup,wheel,Filter-5,LudlWheel,Label,Filter-5

# Preset: Filter-4
ConfigGroup,wheel,Filter-4,LudlWheel,Label,Filter-4

# Preset: Filter-3
ConfigGroup,wheel,Filter-3,LudlWheel,Label,Filter-3

# Preset: Filter-2
ConfigGroup,wheel,Filter-2,LudlWheel,Label,Filter-2

# Preset: Filter-1
ConfigGroup,wheel,Filter-1,LudlWheel,Label,Filter-1


# Group: test_MDA
# Preset: F2
ConfigGroup,test_MDA,F2,Scope,Method,TL BF
ConfigGroup,test_MDA,F2,LudlWheel,Label,Filter-2

# Preset: F1
ConfigGroup,test_MDA,F1,Scope,Method,TL BF
ConfigGroup,test_MDA,F1,LudlWheel,Label,Filter-1

# Preset: TL-BF
ConfigGroup,test_MDA,TL-BF,Scope,Method,TL BF
ConfigGroup,test_MDA,TL-BF,LudlWheel,Label,Filter-5


# Group: test
# Preset: NewPreset
ConfigGroup,test,NewPreset,LudlWheel,State,1



# PixelSize settings

